// Dapi Count
// Logan Manlove
// 6-26-2017
//
// ImageJ Macro built to streamline dapi count analysis



macro "Dapi Count [f1]" {
	run("8-bit");

	// Thresholds to fit the dapi objects
	run("Threshold...");
	selectWindow("Threshold");
	waitForUser("Adjust Threshold, then press 'Ok'");
	run("Convert to Mask"); //This line is here to catch mistakes where the user forgets to complete the thresholding
	selectWindow("Threshold");
	run("Close");
	while (getBoolean(" Dilate? ")){
		run("Dilate");
	}
	while (getBoolean(" Erode? ")){
		run("Erode");
	}
	run("Analyze Particles...", "size=50.00-Infinity show=Masks exclude clear summarize");
}
